CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your workspace, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Time>.*).png
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:RawData
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    Set intensity range from:Image bit-depth
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['Highlight well outlines to turn white for identification, and turn wells black so they will not be identified in next module.']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
    Select the input image:RawData
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:.5,1
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identifying the wells to use as objects to define the grid ']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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:WellsforGrid
    Typical diameter of objects, in pixel units (Min,Max):70,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
DefineGrid:[module_num:7|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notes:['Using the previous modules objects to generate a grid, and outputing over edged image to prepare for worm identification of highlighted worms. Using the grid will number the worms and get rid of some background.']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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Columns
    Define a grid for which cycle?:Once
    Select the method to define the grid:Automatic
    Select the previously identified objects:WellsforGrid
    Select the method to define the grid manually:Coordinates
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    Coordinates of the first cell:298,258
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:1300,820
    Row number of the second cell:6
    Column number of the second cell:10
    Retain an image of the grid?:Yes
    Name the output image:GridedEdgedWorms
    Select the image on which to display the grid:RawData
    Use a previous grid if gridding fails?:No

IdentifyObjectsInGrid:[module_num:8|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notes:['']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
    Select the defined grid:Grid
    Name the objects to be identified:GridWells
    Select object shapes and locations:Circle Forced Location
    Specify the circle diameter automatically?:Manual
    Circle diameter:70
    Select the guiding objects:IdentifyWorms

SaveCroppedObjects:[module_num:9|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notes:['Saves a cropped image of each worm in its well for analysis using RandIndex. Uses GridWells as circle outline to remove more background.']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
    Objects:GridWells
    Directory:Default Input Folder sub-folder|\g<Time>
    Saved file format:png
    Do you want to save cropped images or object masks?:Images
    Image:RawData
